PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '69', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = pix
  Window size (pixels) = [1536, 864]
  color = 1.0000, 1.0000, 1.0000
  expName = mainv5
  frameRateMsg = Preparing... Please wait...
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Introduction
    RoutineSettingsComponent Introduction
      desc = Basically introduction that tells participant what to do next.
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    TextComponent text_norm69
      color = -1.0000, -1.0000, -1.0000
      font = Noto Sans TC
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 15
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      text:
        本實驗歷時30分鐘
        請根據指示進行作答
    ImageComponent btn1_img
      image = normal_next_btn.png
      pos = (btm_x,btm_y)
      size = (btm_size_w,btm_size_h)
      startVal [time (s)] = 0
      units = pix
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    CodeComponent btn1_color_code
      Code Type = Py
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      Each Frame:
        # 滑鼠位置
        mouseX, mouseY = mouse1.getPos()

        # 圖片邊界
        btn_left = btn1_img.pos[0] - btn1_img.size[0]/2
        btn_right = btn1_img.pos[0] + btn1_img.size[0]/2
        btn_top = btn1_img.pos[1] + btn1_img.size[1]/2
        btn_bottom = btn1_img.pos[1] - btn1_img.size[1]/2

        # 檢查滑鼠是否在圖片上
        if btn_left <= mouseX <= btn_right and btn_bottom <= mouseY <= btn_top:
            btn1_img.image = 'highlight_next_btn.png'  # 滑鼠移到上面時，換成高亮圖片
        else:
            btn1_img.image = 'normal_next_btn.png'     # 滑鼠移開時，換回原圖
    MouseComponent mouse1
      clickable = btn1_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = mouse_debounce_timeout
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    TextComponent text_debug
      color = -1.0000, -1.0000, -1.0000
      disabled = True
      font = Noto Sans TC
      letterHeight = 0.038
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $f"[DEBUG]\ntrial_order={trial_order}\nparticipant_num={participant_num}\noffset_target={offset_target}\ninoculation_switch: {inoculation_switch}\nresp_order_list:{resp_order_list}\n{screenX}\n{screenY}\n{mouseX}\n{mouseY}"
      units = norm
      wrapWidth = 2
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  Routine Demographic_Form
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    FormComponent demog_form
      Data Format = rows
      Font = Noto Sans TC
      Item Padding = 0.05
      Items = demographics_form_lookup.csv
      Randomize = False
      Style = custom...
      Text Height = 0.03
      borderColor = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      itemColor = black
      markerColor = black
      pos = (form_xHeight,form_yHeight)
      responseColor = black
      size = (form_wHeight,form_hHeight)
      startVal [time (s)] = 0.0
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    ImageComponent btn2_img
      image = normal_next_btn.png
      pos = (btm_x,btm_y)
      size = (btm_size_w,btm_size_h)
      startVal [condition] = demog_form.complete
      units = pix
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    CodeComponent btn2_color_code
      Code Type = Py
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      Each Frame:
        # 滑鼠位置
        mouseX, mouseY = mouse2.getPos()

        # 圖片邊界
        btn_left = btn2_img.pos[0] - btn2_img.size[0]/2
        btn_right = btn2_img.pos[0] + btn2_img.size[0]/2
        btn_top = btn2_img.pos[1] + btn2_img.size[1]/2
        btn_bottom = btn2_img.pos[1] - btn2_img.size[1]/2

        # 檢查滑鼠是否在圖片上
        if btn_left <= mouseX <= btn_right and btn_bottom <= mouseY <= btn_top:
            btn2_img.image = 'highlight_next_btn.png'  # 滑鼠移到上面時，換成高亮圖片
        else:
            btn2_img.image = 'normal_next_btn.png'     # 滑鼠移開時，換回原圖
    MouseComponent mouse2
      clickable = btn2_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = demog_form.complete
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    TextComponent pre_indicator_3
      color = black
      font = Noto Sans TC
      letterHeight = 0.04
      pos = ((-0.02 + btm_x/screenX) * (screenX/screenY), btm_y/screenY)
      startVal [condition] = not demog_form.complete
      stopVal [condition] = demog_form.complete
      text = [請填寫表單]
      units = height
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  Routine Political_Prefs_Form
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    FormComponent PBF_form
      Data Format = rows
      Font = Noto Sans TC
      Item Padding = 0.1
      Items = political_bias_form.csv
      Randomize = False
      Style = custom...
      Text Height = 0.03
      borderColor = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      itemColor = black
      markerColor = black
      pos = (form_xHeight,form_yHeight)
      responseColor = black
      size = (form_wHeight,form_hHeight)
      startVal [time (s)] = 0.0
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    ImageComponent btn3_img
      image = normal_next_btn.png
      pos = (btm_x,btm_y)
      size = (btm_size_w,btm_size_h)
      startVal [condition] = PBF_form.complete
      units = pix
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    CodeComponent btn3_color_code
      Code Type = Py
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      Each Frame:
        # 滑鼠位置
        mouseX, mouseY = mouse3.getPos()

        # 圖片邊界
        btn_left = btn3_img.pos[0] - btn3_img.size[0]/2
        btn_right = btn3_img.pos[0] + btn3_img.size[0]/2
        btn_top = btn3_img.pos[1] + btn3_img.size[1]/2
        btn_bottom = btn3_img.pos[1] - btn3_img.size[1]/2

        # 檢查滑鼠是否在圖片上
        if btn_left <= mouseX <= btn_right and btn_bottom <= mouseY <= btn_top:
            btn3_img.image = 'highlight_next_btn.png'  # 滑鼠移到上面時，換成高亮圖片
        else:
            btn3_img.image = 'normal_next_btn.png'     # 滑鼠移開時，換回原圖
    MouseComponent mouse3
      clickable = btn3_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = PBF_form.complete
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    TextComponent pre_indicator_2
      color = black
      font = Noto Sans TC
      letterHeight = 0.04
      pos = ((-0.02 + btm_x/screenX) * (screenX/screenY), btm_y/screenY)
      startVal [condition] = not PBF_form.complete
      stopVal [condition] = PBF_form.complete
      text = [請填寫表單]
      units = height
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  Routine Inoculation
    RoutineSettingsComponent Inoculation
      desc = le fkin inoculation
      skipIf = not inoculation_switch
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    TextComponent inoculation_placeholder
      color = black
      disabled = True
      font = Noto Sans TC
      letterHeight = 50
      startVal [time (s)] = 0.0
      units = pix
      wrapWidth = 1500
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      text:
        「替罪羔羊」指的是把一個本來具有多重、複雜成因的問題，全部怪罪到某個人、政黨或族群身上，藉此讓讀者產生「都是他害的」這種過度簡化的結論。只要看到有人把「複雜 → 簡單」一筆帶過，就要警覺可能正在被甩鍋。

        常見徵兆包括：
        ‧ 出現「罪魁禍首」「都是 X 害的」之類的標籤化指控。
        ‧ 把所有負面後果串成一條線，全部指向同一個對象。
        ‧ 幾乎不討論自己或其他可能的因素。
        面對這種訊息，可以先問自己：「真的只有一個原因嗎？」

        範例貼文：
        • 中國國民黨（KMT）在 2025 年 3 月 31 日發文稱：「民進黨錯誤能源政策已導致電價飆漲，成為漲電價元凶！」——「元凶」的用語將問題歸結為單一戰犯。
        • 民主進步黨（DPP）在 2025 年 1 月 16 日發文說：「這些藍白立委亂砍預算，正在刪掉你的權益！」——「亂砍預算」「刪掉你的權益」則把全面後果歸咎於特定對象，同樣屬於甩鍋字眼。
    ImageComponent btn4_img
      image = normal_next_btn.png
      pos = (btm_x,btm_y)
      size = (btm_size_w,btm_size_h)
      startVal [time (s)] = inoculation_debounce_timeout
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    CodeComponent btn4_color_code
      Code Type = Py
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      Each Frame:
        # 滑鼠位置
        mouseX, mouseY = mouse4.getPos()

        # 圖片邊界
        btn_left = btn4_img.pos[0] - btn4_img.size[0]/2
        btn_right = btn4_img.pos[0] + btn4_img.size[0]/2
        btn_top = btn4_img.pos[1] + btn4_img.size[1]/2
        btn_bottom = btn4_img.pos[1] - btn4_img.size[1]/2

        # 檢查滑鼠是否在圖片上
        if btn_left <= mouseX <= btn_right and btn_bottom <= mouseY <= btn_top:
            btn4_img.image = 'highlight_next_btn.png'  # 滑鼠移到上面時，換成高亮圖片
        else:
            btn4_img.image = 'normal_next_btn.png'     # 滑鼠移開時，換回原圖
    MouseComponent mouse4
      clickable = btn4_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = inoculation_debounce_timeout
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    ImageComponent image
      image = text1.png
      size = (stim_heightX_inopic, stim_heightY_inopic)
      startVal [time (s)] = 0.0
      units = pix
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  Routine NonInoculation
    RoutineSettingsComponent NonInoculation
      desc = no inoculation for you, now get out
      skipIf = inoculation_switch
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    TextComponent noninoculation_placeholder
      color = black
      disabled = True
      font = Noto Sans TC
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        「正確辨識海洋生物」指的是依據外觀特徵、棲地及行為，判斷牠們的物種而非憑感覺猜測。掌握明確標準，可降低誤捕或破壞生態的風險。

        常見步驟包括：
        ‧ 先看體型、體色與花紋是否符合已知圖鑑。
        ‧ 觀察鰭形、呼吸孔、觸手等細節。
        ‧ 比對棲地深度及群聚行為。
        遇到陌生物種，可以先問自己：「是否已經至少符合三項指標？」

        範例情境：
        • 潛水員 A 在 2025 年 3 月 31 日回報：「珊瑚礁旁見到身軀銀亮、尾鰭呈 V 字的魚，推測是白舷鰺。」——利用體色及鰭形佐證。
        • 潮間帶導覽員 B 於 2025 年 1 月 16 日紀錄：「岩縫內找到帶紫斑且呈八放射對稱的星狀動物，應為紫斑海星。」——以花紋及體型互相驗證。
    ImageComponent btn5_img
      image = normal_next_btn.png
      pos = (btm_x,btm_y)
      size = (btm_size_w,btm_size_h)
      startVal [time (s)] = inoculation_debounce_timeout
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    CodeComponent btn5_color_code
      Code Type = Py
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      Each Frame:
        # 滑鼠位置
        mouseX, mouseY = mouse5.getPos()

        # 圖片邊界
        btn_left = btn5_img.pos[0] - btn5_img.size[0]/2
        btn_right = btn5_img.pos[0] + btn5_img.size[0]/2
        btn_top = btn5_img.pos[1] + btn5_img.size[1]/2
        btn_bottom = btn5_img.pos[1] - btn5_img.size[1]/2

        # 檢查滑鼠是否在圖片上
        if btn_left <= mouseX <= btn_right and btn_bottom <= mouseY <= btn_top:
            btn5_img.image = 'highlight_next_btn.png'  # 滑鼠移到上面時，換成高亮圖片
        else:
            btn5_img.image = 'normal_next_btn.png'     # 滑鼠移開時，換回原圖
    MouseComponent mouse5
      clickable = btn5_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = inoculation_debounce_timeout
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    ImageComponent image_2
      image = text44.png
      size = (stim_heightX_noninopic, stim_heightY_noninopic)
      startVal [time (s)] = 0.0
      units = pix
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  Routine Start_Of_Practice
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    TextComponent text_norm_2
      color = black
      font = Noto Sans TC
      letterHeight = 50 * (screenX/screenY/form_related_ratio)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = pix
      wrapWidth = 300000
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      text:
        本環節將會提供一篇貼文和隨機次序出現的三個問題進行作答

        每道題目需進行填答才會有「繼續」鍵的出現

        閱覽或作答完畢時請按「繼續」鍵
    ImageComponent btn6_img
      image = normal_next_btn.png
      pos = (btm_x,btm_y)
      size = (btm_size_w,btm_size_h)
      startVal [time (s)] = 0
      units = pix
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    CodeComponent btn6_color_code
      Code Type = Py
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      Each Frame:
        # 滑鼠位置
        mouseX, mouseY = mouse6.getPos()

        # 圖片邊界
        btn_left = btn6_img.pos[0] - btn6_img.size[0]/2
        btn_right = btn6_img.pos[0] + btn6_img.size[0]/2
        btn_top = btn6_img.pos[1] + btn6_img.size[1]/2
        btn_bottom = btn6_img.pos[1] - btn6_img.size[1]/2

        # 檢查滑鼠是否在圖片上
        if btn_left <= mouseX <= btn_right and btn_bottom <= mouseY <= btn_top:
            btn6_img.image = 'highlight_next_btn.png'  # 滑鼠移到上面時，換成高亮圖片
        else:
            btn6_img.image = 'normal_next_btn.png'     # 滑鼠移開時，換回原圖
    MouseComponent mouse6
      clickable = btn6_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = mouse_debounce_timeout
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  Routine stimuli_img
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    ImageComponent stim_img
      image [set every repeat] = $stim_picname
      size [set every repeat] = stim_heightX,stim_heightY
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent img_name_debug
      color = -1.0000, 1.0000, 1.0000
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $stim_picname
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    ImageComponent btn7_img
      image = normal_next_btn.png
      pos = (btm_x,btm_y)
      size = (btm_size_w,btm_size_h)
      startVal [time (s)] = 0.0
      units = pix
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    CodeComponent btn7_color_code
      Code Type = Py
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      Each Frame:
        # 滑鼠位置
        mouseX, mouseY = mouse7.getPos()

        # 圖片邊界
        btn_left = btn7_img.pos[0] - btn7_img.size[0]/2
        btn_right = btn7_img.pos[0] + btn7_img.size[0]/2
        btn_top = btn7_img.pos[1] + btn7_img.size[1]/2
        btn_bottom = btn7_img.pos[1] - btn7_img.size[1]/2

        # 檢查滑鼠是否在圖片上
        if btn_left <= mouseX <= btn_right and btn_bottom <= mouseY <= btn_top:
            btn7_img.image = 'highlight_next_btn.png'  # 滑鼠移到上面時，換成高亮圖片
        else:
            btn7_img.image = 'normal_next_btn.png'     # 滑鼠移開時，換回原圖
    MouseComponent mouse7
      clickable = btn7_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = mouse_debounce_timeout
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  Routine resp_mixed
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    TextComponent we_banner
      color = black
      font = Noto Sans TC
      letterHeight = resp_banner_h * (screenX/screenY/form_related_ratio)
      pos = (0, resp_banner_y)
      startVal [condition] = resp_switch == 2
      text = 這篇貼文的哪個表情符號有最多回應？
      units = pix
      wrapWidth = 69000
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    TextComponent tof_banner
      color = black
      font = Noto Sans TC
      letterHeight = resp_banner_h * (screenX/screenY/form_related_ratio)
      pos = (0, resp_banner_y)
      startVal [condition] = resp_switch == 1
      text = 依據你對「資訊說明」的理解請判斷這則貼文的敘述方式
      units = pix
      wrapWidth = 69000
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    TextComponent att_banner
      color = black
      font = Noto Sans TC
      letterHeight = resp_banner_h * (screenX/screenY/form_related_ratio)
      pos = (0, resp_banner_y)
      startVal [condition] = resp_switch == 3
      text = 你對此貼文抱持的態度？
      units = pix
      wrapWidth = 69000
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    SliderComponent true_or_false
      borderColor = 0.6314, 0.6549, 0.6000
      color = -1.0000, -1.0000, -1.0000
      fillColor = -1.0000, -1.0000, -1.0000
      font = Noto Sans TC
      forceEndRoutine = False
      granularity = 0
      initVal = 5
      labels = "完全無偏頗\n(0分)","1","2","3","4","有點偏頗\n(5分)","6","7","8","9","極度偏頗\n(10分)"
      letterHeight = 30 * (screenX/screenY/form_related_ratio)
      pos = (dv_x, dv_yshort)
      size = (dv_wshort, dv_h)
      startVal [condition] = resp_switch == 1
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
      units = pix
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    TextComponent tof_indicator
      color = black
      font = Noto Sans TC
      letterHeight = 0.087
      pos = (0.8, 0.6)
      startVal [condition] = resp_switch == 1 and pre_tof_status == 0
      text [set every frame] = $round(true_or_false.getRating(),2)
      units = norm
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    TextComponent pre_indicator
      color = black
      font = Noto Sans TC
      letterHeight = 0.087
      pos = (0.8, 0.6)
      startVal [condition] = pre_tof_status == 1
      stopVal [condition] = pre_tof_status == 0
      text [set every repeat] = $pre_ind_text
      units = norm
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    SliderComponent which_emoji
      borderColor = LightGray
      color = white
      fillColor = black
      font = Noto Sans TC
      forceEndRoutine = False
      granularity = 0
      labels = "0","1","2","3","4","5","6"
      letterHeight = 45 * (screenX/screenY/form_related_ratio)
      pos = (dv_x, dv_ylong)
      size = (dv_wlong, dv_h)
      startVal [condition] = resp_switch == 2
      styles = radio
      ticks = (1, 2, 3, 4, 5)
      units = pix
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    ImageComponent attitude_bg
      image = path3.png
      pos = (0, att_bg_y)
      size = (att_bg_w, att_bg_h)
      startVal [condition] = resp_switch == 3
      units = pix
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    SliderComponent attitude
      borderColor = 0.6549, 0.6549, 0.6549
      color = -1.0000, -1.0000, -1.0000
      fillColor = -1.0000, -1.0000, -1.0000
      font = Noto Sans TC
      forceEndRoutine = False
      granularity = 0
      initVal = 5
      letterHeight = 45 * (screenX/screenY/form_related_ratio)
      opacity = 0
      pos = (dv_x, dv_ylong)
      size = (dv_wlong, dv_h)
      startVal [condition] = resp_switch == 3
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
      units = pix
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    CodeComponent code_4
      Code Type = Py
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      Begin Routine:
        true_or_false.rating = 5
        attitude.rating = 5.5
        pre_tof_status = 1
        attitude.line.size=(dv_wlong,30 * (screenX/screenY/form_related_ratio))
      Each Frame:
        if true_or_false.rating != 5 or which_emoji.rating or attitude.rating != 5.5:
            pre_tof_status = 0
    ImageComponent btn8_img
      image = normal_next_btn.png
      pos = (btm_x,btm_y)
      size = (btm_size_w,btm_size_h)
      startVal [condition] = pre_tof_status == 0
      units = pix
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    CodeComponent btn8_color_code
      Code Type = Py
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      Each Frame:
        # 滑鼠位置
        mouseX, mouseY = mouse8.getPos()

        # 圖片邊界
        btn_left = btn8_img.pos[0] - btn8_img.size[0]/2
        btn_right = btn8_img.pos[0] + btn8_img.size[0]/2
        btn_top = btn8_img.pos[1] + btn8_img.size[1]/2
        btn_bottom = btn8_img.pos[1] - btn8_img.size[1]/2

        # 檢查滑鼠是否在圖片上
        if btn_left <= mouseX <= btn_right and btn_bottom <= mouseY <= btn_top:
            btn8_img.image = 'highlight_next_btn.png'  # 滑鼠移到上面時，換成高亮圖片
        else:
            btn8_img.image = 'normal_next_btn.png'     # 滑鼠移開時，換回原圖
    MouseComponent mouse8
      clickable = btn8_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = pre_tof_status == 0
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    ImageComponent we_bg
      image = emoticon_all.png
      pos = (0, we_bg_y)
      size = (we_bg_w, we_bg_h)
      startVal [condition] = resp_switch == 2
      units = pix
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    ImageComponent stim_thumbnail
      image [set every repeat] = $stim_picname
      pos [set every repeat] = (0, aaaaaaaaaaaaaaaaaaaaaaaa * screenY)
      size [set every repeat] = stim_heightX*thumbnail_to_screen_scale_factor,stim_heightY*thumbnail_to_screen_scale_factor
      startVal [condition] = resp_switch != 2
      units = pix
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  Routine End_Of_Practice
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    TextComponent text_norm_3
      color = black
      font = Noto Sans TC
      letterHeight = 50 * (screenX/screenY/form_related_ratio)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = pix
      wrapWidth = 600000
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      text:
        即將進入正式題

        正式題與練習題模式一樣

        請用同樣方式作答
    ImageComponent btn9_img
      image = normal_next_btn.png
      pos = (btm_x,btm_y)
      size = (btm_size_w,btm_size_h)
      startVal [time (s)] = 0.0
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    CodeComponent btn9_color_code
      Code Type = Py
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      Each Frame:
        # 滑鼠位置
        mouseX, mouseY = mouse9.getPos()

        # 圖片邊界
        btn_left = btn9_img.pos[0] - btn9_img.size[0]/2
        btn_right = btn9_img.pos[0] + btn9_img.size[0]/2
        btn_top = btn9_img.pos[1] + btn9_img.size[1]/2
        btn_bottom = btn9_img.pos[1] - btn9_img.size[1]/2

        # 檢查滑鼠是否在圖片上
        if btn_left <= mouseX <= btn_right and btn_bottom <= mouseY <= btn_top:
            btn9_img.image = 'highlight_next_btn.png'  # 滑鼠移到上面時，換成高亮圖片
        else:
            btn9_img.image = 'normal_next_btn.png'     # 滑鼠移開時，換回原圖
    MouseComponent mouse9
      clickable = btn9_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = mouse_debounce_timeout
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  Routine End_Of_Experiment
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    TextComponent goodbye_text
      color = black
      font = Noto Sans TC
      letterHeight = 0.092
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = 實驗結束，感謝參與本實驗。
      units = norm
      wrapWidth = 1.8
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  Routine prepare_resp_order
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    CodeComponent code_5
      Code Type = Py
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      Begin Routine:
        #extract the current resp_order unit
        #to let the script know what order we'll use in this trial round
        resp_order_unit_raw = resp_order_list.pop(0)
        resp_order_unit = [i-1 for i in resp_order_unit_raw]
  Routine prepare_stim
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    CodeComponent prepare_stim_code
      Code Type = Py
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      Begin Routine:
        #stim_heightX = scale_stim_ratio*(stim_pic_sizeY/stim_pic_sizeX)
        #stim_heightY = scale_stim_ratio
        stim_heightX = scale_stim_maxY * (stim_pic_sizeX / stim_pic_sizeY)
        stim_heightY = scale_stim_maxY
        if stim_heightX > scale_stim_maxX:
            stim_heightY = stim_heightY / (stim_heightX / scale_stim_maxX)
            stim_heightX = scale_stim_maxX
  Routine prepare_wtf
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        pre_ycoord = pre_indicator_ycoords[resp_switch-1]
  Routine End_Of_Main_Trial
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    TextComponent text_norm_4
      color = black
      font = Noto Sans TC
      letterHeight = 50 * (screenX/screenY/form_related_ratio)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = pix
      wrapWidth = 60000
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      text:
        實驗環節已結束

        麻煩請填寫事後問卷
    ImageComponent btn10_img
      image = normal_next_btn.png
      pos = (btm_x,btm_y)
      size = (btm_size_w,btm_size_h)
      startVal [time (s)] = 0.0
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    CodeComponent btn10_color_code
      Code Type = Py
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      Each Frame:
        # 滑鼠位置
        mouseX, mouseY = mouse10.getPos()

        # 圖片邊界
        btn_left = btn10_img.pos[0] - btn10_img.size[0]/2
        btn_right = btn10_img.pos[0] + btn10_img.size[0]/2
        btn_top = btn10_img.pos[1] + btn10_img.size[1]/2
        btn_bottom = btn10_img.pos[1] - btn10_img.size[1]/2

        # 檢查滑鼠是否在圖片上
        if btn_left <= mouseX <= btn_right and btn_bottom <= mouseY <= btn_top:
            btn10_img.image = 'highlight_next_btn.png'  # 滑鼠移到上面時，換成高亮圖片
        else:
            btn10_img.image = 'normal_next_btn.png'     # 滑鼠移開時，換回原圖
    MouseComponent mouse10
      clickable = btn10_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = mouse_debounce_timeout
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  Routine test
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    TextComponent text_norm
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Any text

        including line breaks

        This text component is white, so change the colour if you have a white background. It does not save the onset and offset time, but has been left justified with a wrap width of 1.8 norm units.

        Press the spacebar to continue
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine test_2
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    TextComponent text_norm_5
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Any text

        including line breaks

        This text component is white, so change the colour if you have a white background. It does not save the onset and offset time, but has been left justified with a wrap width of 1.8 norm units.

        Press the spacebar to continue
    KeyboardComponent key_instruct_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_2
      Code Type = Py
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      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
  Routine prepare_everything
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    CodeComponent prepare_code
      Code Type = Py
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      Before Experiment:
        from PIL import Image
        import datetime
        #Max mouse debounce timeout(s)
        #Google up the meaning of debounce!
        mouse_debounce_timeout = 1
        #Max mouse debounce timeout(s)
        #Fuck you google!
        inoculation_debounce_timeout = 15 #yes fuck you google.
        #inoculation/non-inoculation share the same scale ratio
        scale_stim_maxX_ratio = 0.8
        scale_stim_maxY_ratio = 0.8
        #thumbnail all share this ratio
        thumbnail_to_screen_scale_factor = 0.35
        #button use these x, y offset(to screen edge), and size ratio
        continue_btm_x_offset_ratio = 0.02742
        continue_btm_y_offset_ratio = 0.05442
        continue_btm_size_ratio = 0.104
        #form can be tricky as it's still bounded by height
        form_offset_left = 0.06125
        form_offset_right = 0.06125
        form_offset_top = 0.08
        form_offset_bottom = 0.22
        form_related_ratio = 1.7777777777777777777777777777777777777777777
        #dv_short/long
        dv_x_offset = 0
        dv_yshort_offset = -0.18
        dv_ylong_offset = -0.285
        dv_h_ratio = 0.06
        dv_wshort_ratio = 0.759375
        dv_wlong_ratio = 0.84375
        #resp_banner
        resp_banner_h_ratio = 0.065
        resp_banner_y_offset = 0.4
        #attitude_bg
        att_bg_ratio = 0.86
        att_bg_y_offset = -0.1455
        #we_bg
        we_bg_ratio = 0.91125
        we_bg_y_offset = -0.13
      Begin Experiment:
        try:
            participant_num = int(expInfo['participant'])
        except ValueError:
            participant_num = 0  # 若輸入非數字，則預設為 0

        counterbalance_order = [
            [1,2,24,3,23,4,22,5,21,6,20,7,19,8,18,9,17,10,16,11,15,12,14,13],
            [2,3,1,4,24,5,23,6,22,7,21,8,20,9,19,10,18,11,17,12,16,13,15,14],
            [3,4,2,5,1,6,24,7,23,8,22,9,21,10,20,11,19,12,18,13,17,14,16,15],
            [4,5,3,6,2,7,1,8,24,9,23,10,22,11,21,12,20,13,19,14,18,15,17,16],
            [5,6,4,7,3,8,2,9,1,10,24,11,23,12,22,13,21,14,20,15,19,16,18,17],
            [6,7,5,8,4,9,3,10,2,11,1,12,24,13,23,14,22,15,21,16,20,17,19,18],
            [7,8,6,9,5,10,4,11,3,12,2,13,1,14,24,15,23,16,22,17,21,18,20,19],
            [8,9,7,10,6,11,5,12,4,13,3,14,2,15,1,16,24,17,23,18,22,19,21,20],
            [9,10,8,11,7,12,6,13,5,14,4,15,3,16,2,17,1,18,24,19,23,20,22,21],
            [10,11,9,12,8,13,7,14,6,15,5,16,4,17,3,18,2,19,1,20,24,21,23,22],
            [11,12,10,13,9,14,8,15,7,16,6,17,5,18,4,19,3,20,2,21,1,22,24,23],
            [12,13,11,14,10,15,9,16,8,17,7,18,6,19,5,20,4,21,3,22,2,23,1,24],
            [13,14,12,15,11,16,10,17,9,18,8,19,7,20,6,21,5,22,4,23,3,24,2,1],
            [14,15,13,16,12,17,11,18,10,19,9,20,8,21,7,22,6,23,5,24,4,1,3,2],
            [15,16,14,17,13,18,12,19,11,20,10,21,9,22,8,23,7,24,6,1,5,2,4,3],
            [16,17,15,18,14,19,13,20,12,21,11,22,10,23,9,24,8,1,7,2,6,3,5,4],
            [17,18,16,19,15,20,14,21,13,22,12,23,11,24,10,1,9,2,8,3,7,4,6,5],
            [18,19,17,20,16,21,15,22,14,23,13,24,12,1,11,2,10,3,9,4,8,5,7,6],
            [19,20,18,21,17,22,16,23,15,24,14,1,13,2,12,3,11,4,10,5,9,6,8,7],
            [20,21,19,22,18,23,17,24,16,1,15,2,14,3,13,4,12,5,11,6,10,7,9,8],
            [21,22,20,23,19,24,18,1,17,2,16,3,15,4,14,5,13,6,12,7,11,8,10,9],
            [22,23,21,24,20,1,19,2,18,3,17,4,16,5,15,6,14,7,13,8,12,9,11,10],
            [23,24,22,1,21,2,20,3,19,4,18,5,17,6,16,7,15,8,14,9,13,10,12,11],
            [24,1,23,2,22,3,21,4,20,5,19,6,18,7,17,8,16,9,15,10,14,11,13,12]
        ]

        resp_counterbalance = [
            [1,2,3],
            [1,3,2],
            [3,1,2],
            [3,2,1],
            [2,3,1],
            [2,1,3]
        ]

        if participant_num < 1:
            raise ValueError(f"WTF我們拿到了受試者號碼{participant_num}")

        # generate countrbl length for 2 further use, controls how many trials a participant will do
        counterbalance_len  = len(counterbalance_order)

        #also resp_order len i guess
        resp_order_cb_len = len(resp_counterbalance)

        # 1. Generate trial_order, a list for controlling participants' stim disp order
        part_cb_index = (participant_num - 1) % counterbalance_len

        raw_order = counterbalance_order[part_cb_index]

        trial_order = [i-1 for i in raw_order]

        # 2. Generate resp_order, a list that determines the order of 3 responses
        # the number 6 is determined by counterbalancing 3 responces's order
        # We try to allocate those '6s' to each participants
        # if the participant have to go through a multiple of 6 times of trials,
        # then the 6s is happily distributed to each participants evenly
        # however that's not all the case, for example, say 32 trials, not a multiple of 6
        # then we'll have to be smart and "guess" where should each participant start,
        # accroding to resp_counterbalance, so the overall counterbalance is achieved.
        # To do this, we calculate... just see the math won't you?
        # After all this is just a reminder for myself in case I start dobuting myself for no reason
        total_offset = (counterbalance_len % resp_order_cb_len) * (participant_num - 1)
        offset_target = (1 + total_offset) % resp_order_cb_len
        # ok now we have offset target (that tells us where does the resp index start... yet)
        # next we'll generate a list of index that's supposed to point to the
        # response order list index, and generate the full list for later use
        resp_order_list = [resp_counterbalance[((offset_target - 1 + i) % resp_order_cb_len)] for i in range(counterbalance_len)]

        # 1st particiant has been subjected to "inoculation"
        inoculation_switch = True if participant_num % 2 == 1 else False

        #le screen size
        screenX, screenY = win.size
        rel_w = (screenX/screenY)/2

        scale_stim_maxX = screenX * scale_stim_maxX_ratio
        scale_stim_maxY = screenY * scale_stim_maxY_ratio

        print(f"Participant: {participant_num}, Sequence: {trial_order}, offset_target: {offset_target}, inoculation_switch: {inoculation_switch}, resp_order_list: {resp_order_list}")

        #inoculation area calculation
        with Image.open('text1.png') as im:
            stim_pic_sizeX_inopic, stim_pic_sizeY_inopic = im.size
        stim_heightX_inopic = scale_stim_maxY * (stim_pic_sizeX_inopic / stim_pic_sizeY_inopic)
        stim_heightY_inopic = scale_stim_maxY
        if stim_heightX_inopic > scale_stim_maxX:
            stim_heightY_inopic = stim_heightY_inopic / (stim_heightX_inopic / scale_stim_maxX)
            stim_heightX_inopic = scale_stim_maxX

        #non-inoculation area calculation
        with Image.open('text44.png') as im:
            stim_pic_sizeX_noninopic, stim_pic_sizeY_noninopic = im.size
        stim_heightX_noninopic = scale_stim_maxY * (stim_pic_sizeX_noninopic / stim_pic_sizeY_noninopic)
        stim_heightY_noninopic = scale_stim_maxY
        if stim_heightX_noninopic > scale_stim_maxX:
            stim_heightY_noninopic = stim_heightY_noninopic / (stim_heightX_noninopic / scale_stim_maxX)
            stim_heightX_noninopic = scale_stim_maxX

        with Image.open('normal_next_btn.png') as im:
            btm_orig_size_x, btm_orig_size_y = im.size
        btm_pic_ratio = btm_orig_size_x/btm_orig_size_y
        btm_size_w = screenX * continue_btm_size_ratio
        btm_size_h = btm_size_w / btm_pic_ratio
        btm_x = screenX/2 - (continue_btm_x_offset_ratio * screenX + btm_size_w/2)
        btm_y = -(screenY/2 - (continue_btm_y_offset_ratio * screenY + btm_size_h/2))

        form_x = 0 #center aligned
        form_y = (form_offset_bottom - form_offset_top) * screenY/2
        form_w = (1 - form_offset_left - form_offset_right) * screenX
        form_h = (1 - form_offset_bottom - form_offset_top) * screenY

        form_xHeight = 0
        form_yHeight = form_y / screenY
        form_wHeight = form_w / screenX * (screenX/screenY)
        form_hHeight = form_h / screenY

        dv_x = dv_x_offset * screenX
        dv_yshort = dv_yshort_offset * screenY
        dv_ylong = dv_ylong_offset * screenY
        dv_wshort = dv_wshort_ratio * screenX
        dv_wlong = dv_wlong_ratio * screenX
        dv_h = dv_h_ratio * screenY

        resp_banner_h = resp_banner_h_ratio * screenY
        resp_banner_y = resp_banner_y_offset * screenY

        with Image.open('path3.png') as im:
            att_bg_size_x, att_bg_size_y = im.size
        att_bg_pic_ratio = att_bg_size_x/att_bg_size_y
        att_bg_w = att_bg_ratio * screenX
        att_bg_h = att_bg_w / att_bg_pic_ratio
        att_bg_y = att_bg_y_offset * screenY

        with Image.open('emoticon_all.png') as im:
            we_bg_size_x, we_bg_size_y = im.size
        we_bg_pic_ratio = we_bg_size_x/we_bg_size_y
        we_bg_w = we_bg_ratio * screenX
        we_bg_h = we_bg_w / we_bg_pic_ratio
        we_bg_y = we_bg_y_offset * screenY

        print(f"att_bg_w:{att_bg_w},att_bg_h:{att_bg_h},att_bg_y:{att_bg_y}")

        print(f"form_x:{form_x},form_y:{form_y},form_w:{form_w},form_h:{form_h}")
        print(f"form_xHeight:{form_xHeight},form_yHeight:{form_yHeight},form_wHeight:{form_wHeight},form_hHeight:{form_hHeight}")
      Begin Routine:
        text_norm69.alignText= 'center'
  Routine Ino_Intro
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    TextComponent text_norm_6
      color = -1.0000, -1.0000, -1.0000
      font = Noto Sans TC
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 69
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      text:
        接下來將會提供閱讀材料，請仔細閱讀以便後續實驗進行

        閱讀材料顯示後十五秒，「繼續」鍵才會顯示
    ImageComponent btn69_img
      image = normal_next_btn.png
      pos = (btm_x,btm_y)
      size = (btm_size_w,btm_size_h)
      startVal [time (s)] = 0
      units = pix
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    CodeComponent btn69_color_code
      Code Type = Py
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      Each Frame:
        # 滑鼠位置
        mouseX, mouseY = mouse69.getPos()

        # 圖片邊界
        btn_left = btn69_img.pos[0] - btn69_img.size[0]/2
        btn_right = btn69_img.pos[0] + btn69_img.size[0]/2
        btn_top = btn69_img.pos[1] + btn69_img.size[1]/2
        btn_bottom = btn69_img.pos[1] - btn69_img.size[1]/2

        # 檢查滑鼠是否在圖片上
        if btn_left <= mouseX <= btn_right and btn_bottom <= mouseY <= btn_top:
            btn69_img.image = 'highlight_next_btn.png'  # 滑鼠移到上面時，換成高亮圖片
        else:
            btn69_img.image = 'normal_next_btn.png'     # 滑鼠移開時，換回原圖
    MouseComponent mouse69
      clickable = btn69_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = mouse_debounce_timeout
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  Routine Review_Intro
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    TextComponent text_norm_7
      color = -1.0000, -1.0000, -1.0000
      font = Noto Sans TC
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 69
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      text:
        接下來會進行「資訊說明」的簡單複習
        閱讀完題目請對A、B選項進行選擇
        作答完畢3秒後會公布答案
        充分理解完後請按「繼續」鍵
    ImageComponent btn69_img_2
      image = normal_next_btn.png
      pos = (btm_x,btm_y)
      size = (btm_size_w,btm_size_h)
      startVal [time (s)] = 0
      units = pix
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    CodeComponent btn69_color_code_2
      Code Type = Py
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      Each Frame:
        # 滑鼠位置
        mouseX, mouseY = mouse69_2.getPos()

        # 圖片邊界
        btn_left = btn69_img_2.pos[0] - btn69_img_2.size[0]/2
        btn_right = btn69_img.pos[0] + btn69_img_2.size[0]/2
        btn_top = btn69_img_2.pos[1] + btn69_img_2.size[1]/2
        btn_bottom = btn69_img_2.pos[1] - btn69_img_2.size[1]/2

        # 檢查滑鼠是否在圖片上
        if btn_left <= mouseX <= btn_right and btn_bottom <= mouseY <= btn_top:
            btn69_img_2.image = 'highlight_next_btn.png'  # 滑鼠移到上面時，換成高亮圖片
        else:
            btn69_img_2.image = 'normal_next_btn.png'     # 滑鼠移開時，換回原圖
    MouseComponent mouse69_2
      clickable = btn69_img_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = mouse_debounce_timeout
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  Routine Review_trial
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    PolygonComponent ans_rect
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 10
      pos = (-0.018, 0.048)
      shape = rectangle
      size = (1.3, 0.1)
      startVal [condition] = slider_placeholder == 1
      units = height
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    TextComponent review_header
      color = -1.0000, -1.0000, -1.0000
      font = Noto Sans TC
      letterHeight = 0.08
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 資訊說明複習
      units = height
      wrapWidth = 69
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    TextComponent ino_review_q
      color = -1.0000, -1.0000, -1.0000
      font = Noto Sans TC
      letterHeight = 0.05
      pos = (0,0.05)
      saveStartStop = False
      startVal [condition] = inoculation_switch == 1
      units = height
      wrapWidth = 1.3
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      text:
        替罪羔羊手法是如何誤導訊息的？

        A：把複雜問題全怪在同一個人或群體上，不談其他因素。

        B：列出多個可能成因並比較權重，不把問題刻意丟給單一方。
    TextComponent nonino_review_q
      color = -1.0000, -1.0000, -1.0000
      font = Noto Sans TC
      letterHeight = 0.05
      pos = (0,0.05)
      saveStartStop = False
      startVal [condition] = inoculation_switch == 0
      units = height
      wrapWidth = 1.3
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      text:
        正確辨識海洋生物的方法是什麼？

        A：看外觀+棲地+習性，再對照圖鑑，多指標一致才判定。

        B：只看某一個特徵，之後再找資料確認
    SliderComponent slider
      borderColor = -0.0039, 1.0000, 0.6627
      color = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 1
      labels = 2,1
      letterHeight = 0.05
      ori = 90
      pos = (-0.72, -0.025)
      size = (0.14, 0.05)
      startVal [time (s)] = 0.0
      stopVal [condition] = slider_placeholder == 1
      styles = radio
      ticks = (0, 1)
      units = height
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    PolygonComponent ansTag
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 0.6549, 0.6549, 0.6549
      lineWidth = 12
      pos [set every frame] = (-0.72, AnsY)
      shape = circle
      size = (0.042)
      startVal [condition] = slider_placeholder == 1
      units = height
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    PolygonComponent noAnsTag
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      lineWidth = 12
      pos [set every frame] = (-0.72, NoAnsY)
      shape = circle
      size = (0.042)
      startVal [condition] = slider_placeholder == 1
      units = height
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    CodeComponent code_2
      Code Type = Py
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      Begin Experiment:
        ino_review_q.alignText = 'left'
        nonino_review_q.alignText = 'left'
      Begin Routine:
        slider_placeholder = 0
        selection_time = None
        next_button_enable = 0

        #Review part
        upper_ansYH = 0.045
        lower_ansTH = -0.095
        AnsY = 0
        NoAnsY = 0
      Each Frame:
        if slider_placeholder != 1:
            if slider.getRating() == 1:
                AnsY = upper_ansYH
                NoAnsY = lower_ansTH
                slider_placeholder = 1
                selection_time = datetime.datetime.now()
            elif slider.getRating() == 2:
                AnsY = lower_ansTH
                NoAnsY = upper_ansYH
                slider_placeholder = 1
                selection_time = datetime.datetime.now()
        if slider_placeholder == 1 and next_button_enable == 0:
            elapsed = (datetime.datetime.now() - selection_time).total_seconds()
            if elapsed >= 3:
                next_button_enable = 1
    TextComponent ino_answer
      color = -1.0000, -1.0000, -1.0000
      font = Noto Sans TC
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [condition] = inoculation_switch == 1 and slider_placeholder == 1
      text = 答案：A（代罪羔羊的核心手法就是把複雜問題簡化成單一指責）
      units = height
      wrapWidth = 2
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    TextComponent nonino_answer
      color = -1.0000, -1.0000, -1.0000
      font = Noto Sans TC
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [condition] = inoculation_switch == 0 and slider_placeholder == 1
      text = 答案：A（正確辨識的核心手法就是用多面向觀察反覆驗證）
      units = height
      wrapWidth = 2
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    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $f"{datetime.datetime.now()}\n{selection_time}"
      units = height
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    ImageComponent btn_rev_img
      image = normal_next_btn.png
      pos = (btm_x,btm_y)
      size = (btm_size_w,btm_size_h)
      startVal [condition] = next_button_enable == 1
      units = pix
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    CodeComponent btn_rev_img_2
      Code Type = Py
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      Each Frame:
        # 滑鼠位置
        mouseX, mouseY = mouse_rev.getPos()

        # 圖片邊界
        btn_left = btn_rev_img.pos[0] - btn_rev_img.size[0]/2
        btn_right = btn_rev_img.pos[0] + btn_rev_img.size[0]/2
        btn_top = btn_rev_img.pos[1] + btn_rev_img.size[1]/2
        btn_bottom = btn_rev_img.pos[1] - btn_rev_img.size[1]/2

        # 檢查滑鼠是否在圖片上
        if btn_left <= mouseX <= btn_right and btn_bottom <= mouseY <= btn_top:
            btn_rev_img.image = 'highlight_next_btn.png'  # 滑鼠移到上面時，換成高亮圖片
        else:
            btn_rev_img.image = 'normal_next_btn.png'     # 滑鼠移開時，換回原圖
    MouseComponent mouse_rev
      clickable = btn_rev_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = next_button_enable == 1
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  Routine NonIno_Review
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  Routine routine_69
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    TextComponent text_norm_8
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Any text

        including line breaks

        This text component is white, so change the colour if you have a white background. It does not save the onset and offset time, but has been left justified with a wrap width of 1.8 norm units.

        Press the spacebar to continue
    KeyboardComponent key_instruct_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_3
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
Flow
  Routine prepare_everything
  Routine Introduction
  Routine Demographic_Form
  Routine Ino_Intro
  Routine Inoculation
  Routine NonInoculation
  Routine Review_Intro
  Routine Review_trial
  Routine Start_Of_Practice
  LoopInitiator practice_loop loopType="TrialHandler"
    Selected rows = [0,1,2]
    conditionsFile = prac_stim_cb_lookup.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('cb_id_prac', 0), ('stim_picname', 'practice-01.png'), ('practice_loop_special_setting', [0, 1, 2]), ('stim_pic_sizeX', 1920), ('stim_pic_sizeY', 1608)]),
      OrderedDict([('cb_id_prac', 1), ('stim_picname', 'practice-02.png'), ('practice_loop_special_setting', [2, 0, 1]), ('stim_pic_sizeX', 1921), ('stim_pic_sizeY', 1607)]),
      OrderedDict([('cb_id_prac', 2), ('stim_picname', 'practice-03.png'), ('practice_loop_special_setting', [1, 0, 2]), ('stim_pic_sizeX', 1922), ('stim_pic_sizeY', 1596)])]
    Routine prepare_stim
    Routine stimuli_img
    LoopInitiator resp_prac_loop loopType="TrialHandler"
      Selected rows = $practice_loop_special_setting
      conditionsFile = prac_resp_type_lookup.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('resp_switch', 1), ('resp_comment', 'True/Fake News'), ('pre_ind_ycoord', 0.08), ('pre_ind_text', ' [請拉拉桿] ')]),
        OrderedDict([('resp_switch', 2), ('resp_comment', 'Emoji guess'), ('pre_ind_ycoord', 0.15), ('pre_ind_text', ' [請點選] ')]),
        OrderedDict([('resp_switch', 3), ('resp_comment', 'Attitude'), ('pre_ind_ycoord', 0.2), ('pre_ind_text', ' [請拉拉桿] ')])]
      Routine resp_mixed
    LoopTerminator resp_prac_loop
  LoopTerminator practice_loop
  Routine End_Of_Practice
  LoopInitiator main_loop loopType="TrialHandler"
    Selected rows = $trial_order
    conditionsFile = main_stim_cb_lookup.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('stim_picname', '000-1.png'), ('stim_pic_sizeX', 875), ('stim_pic_sizeY', 387)]),
      OrderedDict([('stim_picname', '000-2.png'), ('stim_pic_sizeX', 938), ('stim_pic_sizeY', 409)]),
      OrderedDict([('stim_picname', '000-3.png'), ('stim_pic_sizeX', 897), ('stim_pic_sizeY', 390)]),
      OrderedDict([('stim_picname', '001-1.png'), ('stim_pic_sizeX', 843), ('stim_pic_sizeY', 374)]),
      OrderedDict([('stim_picname', '001-2.png'), ('stim_pic_sizeX', 749), ('stim_pic_sizeY', 329)]),
      OrderedDict([('stim_picname', '001-3.png'), ('stim_pic_sizeX', 868), ('stim_pic_sizeY', 387)]),
      OrderedDict([('stim_picname', '010-1.png'), ('stim_pic_sizeX', 742), ('stim_pic_sizeY', 326)]),
      OrderedDict([('stim_picname', '010-2.png'), ('stim_pic_sizeX', 833), ('stim_pic_sizeY', 364)]),
      OrderedDict([('stim_picname', '010-3.png'), ('stim_pic_sizeX', 747), ('stim_pic_sizeY', 328)]),
      OrderedDict([('stim_picname', '011-1.png'), ('stim_pic_sizeX', 845), ('stim_pic_sizeY', 373)]),
      OrderedDict([('stim_picname', '011-2.png'), ('stim_pic_sizeX', 802), ('stim_pic_sizeY', 348)]),
      OrderedDict([('stim_picname', '011-3.png'), ('stim_pic_sizeX', 915), ('stim_pic_sizeY', 402)]),
      OrderedDict([('stim_picname', '100-1.png'), ('stim_pic_sizeX', 946), ('stim_pic_sizeY', 419)]),
      OrderedDict([('stim_picname', '100-2.png'), ('stim_pic_sizeX', 833), ('stim_pic_sizeY', 355)]),
      OrderedDict([('stim_picname', '100-3.png'), ('stim_pic_sizeX', 744), ('stim_pic_sizeY', 324)])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
    Routine prepare_stim
    Routine stimuli_img
    Routine prepare_resp_order
    LoopInitiator resp_main_loop loopType="TrialHandler"
      Selected rows = $resp_order_unit
      conditionsFile = prac_resp_type_lookup.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('resp_switch', 1), ('resp_comment', 'True/Fake News')]),
        OrderedDict([('resp_switch', 2), ('resp_comment', 'Emoji guess')]),
        OrderedDict([('resp_switch', 3), ('resp_comment', 'Attitude')])]
      Routine resp_mixed
    LoopTerminator resp_main_loop
  LoopTerminator main_loop
  Routine End_Of_Main_Trial
  Routine Political_Prefs_Form
  Routine End_Of_Experiment
